<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindPavlovianConditioningDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.VersionControl;assembly=AllenNeuralDynamics.VersionControl"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p4="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindPavlovianConitioningTaskLogic.json</TaskLogicPath>
        <RigPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindPavlovianConditioningRig.json</RigPath>
        <SessionPath>C:\Users\neurogears\source\repos\AllenNeuralDynamics\PavlovianCond_Bonsai\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPavlovianConditioningRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindPavlovianConitioningTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p2:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionSettings</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:CreateRepository">
                <p3:Path>../.</p3:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Repository</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpBehavior.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpBehaviorDevice.bonsai">
                    <PortName>COM4</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpSoundCard.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>HarpSoundCard</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                          <rx:Name>HarpSoundCardCommands</rx:Name>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="PortName" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p4:Device">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:Heartbeat>Disabled</harp:Heartbeat>
                            <harp:IgnoreErrors>false</harp:IgnoreErrors>
                            <harp:PortName>COM8</harp:PortName>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>HarpSoundCardEvents</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" DisplayName="TriggerHarpReadDumpSubjectName" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TriggerHarpReadDump</Name>
                        </Expression>
                        <Expression xsi:type="harp:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                            <harp:OperationMode>Active</harp:OperationMode>
                            <harp:DumpRegisters>true</harp:DumpRegisters>
                            <harp:MuteReplies>false</harp:MuteReplies>
                            <harp:VisualIndicators>On</harp:VisualIndicators>
                            <harp:OperationLed>On</harp:OperationLed>
                            <harp:Heartbeat>Enabled</harp:Heartbeat>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpSoundCardCommands</Name>
                        </Expression>
                        <Expression xsi:type="p4:CreateMessage">
                          <harp:MessageType>Write</harp:MessageType>
                          <harp:Payload xsi:type="p4:CreateStopPayload">
                            <p4:Stop>0</p4:Stop>
                          </harp:Payload>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>HarpSoundCardCommands</Name>
                        </Expression>
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:SoundStimulus">
                    <rx:Name>PlaySound</rx:Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="AttenuationLeft" Selector="Attenuation" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreateAttenuationLeftPayload">
                      <p4:AttenuationLeft>200</p4:AttenuationLeft>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="PlaySoundOrFrequency" Selector="Index" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="p4:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="p4:CreatePlaySoundOrFrequencyPayload">
                      <p4:PlaySoundOrFrequency>11</p4:PlaySoundOrFrequency>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpSoundCardCommands</Name>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
                    <rx:Name>RewardPulse</rx:Name>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="PulseSupplyPort0" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreatePulseSupplyPort0Payload">
                      <beh:PulseSupplyPort0>24</beh:PulseSupplyPort0>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="beh:CreateMessage">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                      <beh:OutputSet>SupplyPort0</beh:OutputSet>
                    </harp:Payload>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="13" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source2" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartCondition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>HardwareChecks</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>RepositoryValidation</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Repository</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p3:IsRepositoryClean">
                      <p3:IgnoreUntracked>false</p3:IgnoreUntracked>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubjectSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AllowDirtyRepo</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name>AllowDirty?</scr:Name>
                    <scr:Expression>Item2 ? False : Item1</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p5:ThrowException">
                      <p5:Message>Repository is not clean! Please discard all local changes.</p5:Message>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SkipHardwareValidation</Selector>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>TaskLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters.Environment.Blocks</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>DoBlock</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>DoTrial</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Block</Name>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>InterTrialInterval</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>InterTrialInterval</Selector>
                              </Expression>
                              <Expression xsi:type="p1:MatchDistribution">
                                <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExponentialDistribution" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:SampleDistribution" />
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TaskParameters.MinIti</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="Add" />
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Timer">
                                  <rx:DueTime>PT3.083S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Block</Name>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>Item2</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="5" To="8" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source2" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source1" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="rx:SelectMany">
                          <Name>Stimulus</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RewardSelection</Selector>
                              </Expression>
                              <Expression xsi:type="p1:MatchDistribution">
                                <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UniformDistribution" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:SampleDistribution" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>RewardSelection</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>RewardSelection</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Block</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>RewardProbabilityP</Selector>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:WithLatestFrom" />
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>Rewarded</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="LessThanOrEqual" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>true</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:Condition">
                                <Name>Unrewarded</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="GreaterThan" />
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="0" To="1" Label="Source1" />
                                    <Edge From="1" To="2" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="BooleanProperty">
                                  <Value>false</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Merge" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Rewarded</Name>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Rewarded</Name>
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>PlayStimulus</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TaskLogicSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>TaskParameters.Cs</Selector>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>PlaySound</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="2" To="3" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>TaskLogicSchema</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TaskParameters.RewardDelay</Selector>
                              </Expression>
                              <Expression xsi:type="scr:ExpressionTransform">
                                <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="DueTime" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Delay">
                                  <rx:DueTime>PT0.1S</rx:DueTime>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:SelectMany">
                                <Name>RewardLogic</Name>
                                <Workflow>
                                  <Nodes>
                                    <Expression xsi:type="WorkflowInput">
                                      <Name>Source1</Name>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>Rewarded</Name>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Name>Rewarded</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="SubscribeSubject">
                                      <Name>TaskLogicSchema</Name>
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>TaskParameters.RewardSize</Selector>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:WithLatestFrom" />
                                    </Expression>
                                    <Expression xsi:type="MemberSelector">
                                      <Selector>Item2</Selector>
                                    </Expression>
                                    <Expression xsi:type="MulticastSubject">
                                      <Name>RewardPulse</Name>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="BooleanProperty">
                                        <Value>true</Value>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="rx:Condition">
                                      <Name>Unrewarded</Name>
                                      <Workflow>
                                        <Nodes>
                                          <Expression xsi:type="WorkflowInput">
                                            <Name>Source1</Name>
                                          </Expression>
                                          <Expression xsi:type="BitwiseNot" />
                                          <Expression xsi:type="WorkflowOutput" />
                                        </Nodes>
                                        <Edges>
                                          <Edge From="0" To="1" Label="Source1" />
                                          <Edge From="1" To="2" Label="Source1" />
                                        </Edges>
                                      </Workflow>
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Merge" />
                                    </Expression>
                                    <Expression xsi:type="Combinator">
                                      <Combinator xsi:type="rx:Take">
                                        <rx:Count>1</rx:Count>
                                      </Combinator>
                                    </Expression>
                                    <Expression xsi:type="WorkflowOutput" />
                                  </Nodes>
                                  <Edges>
                                    <Edge From="1" To="2" Label="Source1" />
                                    <Edge From="1" To="9" Label="Source1" />
                                    <Edge From="2" To="5" Label="Source1" />
                                    <Edge From="3" To="4" Label="Source1" />
                                    <Edge From="4" To="5" Label="Source2" />
                                    <Edge From="5" To="6" Label="Source1" />
                                    <Edge From="6" To="7" Label="Source1" />
                                    <Edge From="7" To="8" Label="Source1" />
                                    <Edge From="8" To="10" Label="Source1" />
                                    <Edge From="9" To="10" Label="Source2" />
                                    <Edge From="10" To="11" Label="Source1" />
                                    <Edge From="11" To="12" Label="Source1" />
                                  </Edges>
                                </Workflow>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="6" To="9" Label="Source1" />
                              <Edge From="7" To="8" Label="Source1" />
                              <Edge From="8" To="9" Label="Source2" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="9" To="12" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="14" Label="Source1" />
                              <Edge From="12" To="13" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="14" To="15" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="17" To="18" Label="Source1" />
                              <Edge From="18" To="23" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source1" />
                              <Edge From="22" To="23" Label="Source2" />
                              <Edge From="23" To="24" Label="Source1" />
                              <Edge From="24" To="25" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Block</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Length</Selector>
                  </Expression>
                  <Expression xsi:type="p1:MatchDistribution">
                    <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExponentialDistribution" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:SampleDistribution" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Ceiling" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>12</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="11" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>